OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Electrode localisation file reader => #0
  Filename = C:/Users/michael/Desktop/GitHub/EmotionReader/source/channel_locations.txt
Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal filter "Low pass filter 40 Hz"
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 40
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Signal Decimation "Downsample to 256 Hz" => #3
  Decimation factor = 8
Data=#3 -> Signal display "Show raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Signal stream -> Temporal filter "Low pass filter 40 Hz"
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 40
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching "Fix segmentation"
  Epoch 1 duration (in sec) = 3
  Epoch 1 intervals (in sec) = 0.1
-> Signal Decimation "Downsample to 256 Hz"
  Decimation factor = 8
-> Temporal filter "Alpha extraction 8 - 12 Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "Power spectrum"
  Equation = x*x
-> Signal average
-> Simple DSP "Log transformation" => #11
  Equation = log(1+x)
Signal=#11, Channel localisation=#0 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
#11 -> Channel Selector "Fp1" => #13
  Channel List = Fp1
  Action = Select
  Channel Matching Method = Smart
#11 -> Channel Selector "Fp2" => #14
  Channel List = Fp2
  Action = Select
  Channel Matching Method = Smart
Input - A=#13, Input - B=#14 -> Simple DSP "FAA = log(Fp2 - Fp1) / log(Fp1 + Fp2)" => #15
  Equation = (b-a)/(b+a)
-> Matrix Display "Visualize valence"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#15 -> CSV File Writer "Write asymmetry"
  Filename = C:/Users/michael/Desktop/GitHub/EmotionReader/output/stream_asymmetry.csv
  Column separator = ;
  Precision = 10
#11 -> CSV File Writer "Write power spectral"
  Filename = C:/Users/michael/Desktop/GitHub/EmotionReader/output/stream_power.csv
  Column separator = ;
  Precision = 10
