OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
0x790d75b8 = Michael Tesar
0x8c1fc55b = 0.1
0x9f5c4075 = EmotionReader
0xf6b2e3fa = BCI
0xf8034a49 = University of South Bohemia
Comment
  Frontal alpha asymmetry pipeline
Comment
  Power spectrum pipeline
Comment
  Vizualization

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Signal Decimation => #1
  Decimation factor = 8
Data=#1 -> Signal display "Display raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Channel Selector "Select Fp1 and Fp2 channels"
  Channel List = Fp1;Fp2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Filter only 8-13 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Time based epoching "Segmentation every 2 sec"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.1
-> Spectral analysis (FFT) => #6
  Spectral components = Amplitude
#6.Amplitude -> 0xc67a01dc Spectrum Average
  Considers zeros = false
-> Simple DSP "Log transformation" => #8
  Equation = log(x)
-> Matrix Display "Show Fp1 and Fp2 values"
  Color gradient = 0:7,100,0; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#8 -> Send asymmetries at TCP/IP
  Port = 5678
  Output format = Raw
#1 -> Temporal filter "Filter only 8-13 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Time based epoching "Segmentation every 2 sec"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.1
-> Spectral analysis (FFT) => #13
  Spectral components = Amplitude
#13.Amplitude -> Spectrum Average => #14
  Considers zeros = false
-> Send spectrum at TCP/IP
  Port = 5679
  Output format = Raw
Electrode localisation file reader => #16
  Filename = C:/Users/michael/Desktop/GitHub/EmotionReader/cartesian.txt
Signal=#14, Channel localization=#16 -> 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0
Signal=#14, Channel localisation=#16 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center

0xc73e83ec Offline reader
  Filename = C:/Users/michael/Desktop/TestData
  Samples per buffer = 32
  Subtract physical minimum = false

Channel Rename
  New channel names = Channel 1;Channel 2
