---
API: 2
OpenSesame: 3.1.3
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "EmotionReader Paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/michael/Desktop/EmotionReader_Paradigm"
set disable_garbage_collection yes
set description "Hack-The-Brain Hackaton 2016 in Prague. Michael Tesar, Michal Lenc and Eva Matuchova"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction always
	run showImages always

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad imagedisplay
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[EmotionalStimuli]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Wellcome into EmotionReader experiment.<br /><br />You will see some emotional images. Your task is to just focus on them.<br /><br />Press any key to continue." x=32.0 y=0.0 z_index=0

define keyboard_response kbresponse
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrResp]"
	set allowed_responses "1;2;3"

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes
	log kbresponse_response

define sequence showImages
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stimuliLoop always

define sequence stimulation
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run imagedisplay always
	run kbresponse always
	run new_logger always

define loop stimuliLoop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 106
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 EmotionalStimuli "stimuli/neg_1.jpg"
	setcycle 0 Valence negative
	setcycle 0 CorrResp 2.0
	setcycle 1 EmotionalStimuli "stimuli/neg_10.jpg"
	setcycle 1 Valence negative
	setcycle 1 CorrResp 2.0
	setcycle 2 EmotionalStimuli "stimuli/neg_11.jpg"
	setcycle 2 Valence negative
	setcycle 2 CorrResp 2.0
	setcycle 3 EmotionalStimuli "stimuli/neg_12.jpg"
	setcycle 3 Valence negative
	setcycle 3 CorrResp 2.0
	setcycle 4 EmotionalStimuli "stimuli/neg_13.jpg"
	setcycle 4 Valence negative
	setcycle 4 CorrResp 2.0
	setcycle 5 EmotionalStimuli "stimuli/neg_14.jpg"
	setcycle 5 Valence negative
	setcycle 5 CorrResp 2.0
	setcycle 6 EmotionalStimuli "stimuli/neg_15.jpg"
	setcycle 6 Valence negative
	setcycle 6 CorrResp 2.0
	setcycle 7 EmotionalStimuli "stimuli/neg_16.jpg"
	setcycle 7 Valence negative
	setcycle 7 CorrResp 2.0
	setcycle 8 EmotionalStimuli "stimuli/neg_17.jpg"
	setcycle 8 Valence negative
	setcycle 8 CorrResp 2.0
	setcycle 9 EmotionalStimuli "stimuli/neg_18.jpg"
	setcycle 9 Valence negative
	setcycle 9 CorrResp 2.0
	setcycle 10 EmotionalStimuli "stimuli/neg_19.jpg"
	setcycle 10 Valence negative
	setcycle 10 CorrResp 2.0
	setcycle 11 EmotionalStimuli "stimuli/neg_2.jpg"
	setcycle 11 Valence negative
	setcycle 11 CorrResp 2.0
	setcycle 12 EmotionalStimuli "stimuli/neg_20.jpg"
	setcycle 12 Valence negative
	setcycle 12 CorrResp 2.0
	setcycle 13 EmotionalStimuli "stimuli/neg_21.jpg"
	setcycle 13 Valence negative
	setcycle 13 CorrResp 2.0
	setcycle 14 EmotionalStimuli "stimuli/neg_22.jpg"
	setcycle 14 Valence negative
	setcycle 14 CorrResp 2.0
	setcycle 15 EmotionalStimuli "stimuli/neg_23.jpg"
	setcycle 15 Valence negative
	setcycle 15 CorrResp 2.0
	setcycle 16 EmotionalStimuli "stimuli/neg_24.jpg"
	setcycle 16 Valence negative
	setcycle 16 CorrResp 2.0
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	setcycle 40 EmotionalStimuli "stimuli/neu_1.jpg"
	setcycle 40 Valence neutral
	setcycle 40 CorrResp 3.0
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	setcycle 69 EmotionalStimuli "stimuli/pos_1.jpg"
	setcycle 69 Valence positive
	setcycle 69 CorrResp 1.0
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	setcycle 105 EmotionalStimuli ""
	setcycle 105 Valence ""
	setcycle 105 CorrResp ""
	run stimulation

